//Myelinated Axon
//help from http://www.neuron.yale.edu/phpBB/viewtopic.php?f=15&t=2653&p=10618&hilit=myelinated+axon#p10618

load_file("nrngui.hoc")
load_proc("nrnmainmenu")

create node[1]
objref nodes

vinit = -65 //mV
// buildaxon creates an axon that has 21 compartments, 20 nodes

proc buildaxon() {local k
    nnode = $1
    create node[nnode]
    nodes = new SectionList()
    forsec "node" nodes.append
    access node[0]
    for k = 0, nnode-2{
        connect node[k+1](1),node[k](0)
    }
}

proc physprop(){
    forsec nodes{
        diam = 0.7*1.4//um
        l = 1//µm
        L = 100*1.4 //µm
        nseg = 15
        define_shape()
    }
}

proc membprop(){
    
    forsec nodes{
        insert hh
        insert extracellular
        Rm = 1000
        Ra = 100*((l+L)/l)/1e4
        cm = 2
    }
    
}


proc make() {
    buildaxon($1)
    physprop()
    membprop()
}

make(21) //create 21 nodes and 20 internodes



objref pos_nx, pos_ny, pos_nz
pos_nx = new Vector(nnode-1)
pos_ny = new Vector(nnode-1)
pos_nz = new Vector(nnode-1)

for i= 0, nnode-2 {
    pos_nx.set(i, l*(i+1)+i*L)
    pos_ny.set(i, 0)
    pos_nz.set(i, 0)
}


// set electrode stim *****

AMP = -.1 //mA
DUR = 1
DEL = 1
dt = 0.01
tstop = 10

objref Istep

Istep = new Vector(tstop/dt)

for i = 0, tstop/dt-1 {
        
    if (i <= (DEL+DUR)/dt && i >= DEL/dt){
        Istep.set(i,AMP)
    }else {
        Istep.set(i,0)
    }
    
    i = i+1
}

// end set electrode stim *****


// set electrode pos *******

rho = 70 //Ohm cm //ex_resistivity

XE = 1410  // µm
YE = 100  // µm
ZE = 0    // µm

objref dist_r, xtra_pot
dist_r = new Vector(nnode-1)
xtra_pot = new Vector(nnode-1)

// Point in time over Space
for k = 0, nnode-2 {
    dist = sqrt((pos_nx.get(k) - XE)^2 + (pos_ny.get(k) - YE)^2 + (pos_ny.get(k) - ZE)^2)
    dist_r.set(k,dist)
    ve = (AMP * rho / 4 / PI)*(1/dist)*10^4
    xtra_pot.set(k,ve)
}

// end set electrode pos ******


// Point in Space over time ****
objref dist_at_node
dist_at_node = new Vector(nnode-1)
objref xtra_pot_at_node
xtra_pot_at_node = new Matrix(tstop/dt,nnode-1)


for j = 0, nnode-2 {
    node_num = j
    dist_at_node.set(j,sqrt((pos_nx.get(node_num) - XE)^2 + (pos_ny.get(node_num) - YE)^2 + (pos_ny.get(node_num) - ZE)^2))
    
    for k = 0, tstop/dt-1 {
        ve = (Istep.get(k) * rho / 4 / PI)*(1/dist_at_node.get(j))*10^4
        xtra_pot_at_node.setval(k,j,ve)
    }
}

objref f
f=new File()
f.wopen("test.txt")
xtra_pot_at_node.fprint(f)
f.close()

// end point in Space over time ****

for j = 0, nnode-2 {
    access node[j]
    node[j].e_extracellular(0.5) = xtra_pot.get(j)
    print e_extracellular
}

objref vec, g2
g2 = new Graph()
g2.size(0, 2680, -70,10)
vec = xtra_pot
vec.plot(g2, pos_nx, 3,2)

objref p, vnodes
p = new Graph()
p.size(0,tstop,-90,100)
//p.label(0.3,0,"Time (ms)")
//p.label(0,0.5,"Current (mA/cm2)")
vnodes = new Vector()
vnodes.record(&node[10].v(.5))
run()
vnodes.plot(p,dt,3,2)

objref p2, vnode
p2 = new Graph()
p2.size(0,tstop,-90,100)
//p.label(0.3,0,"Time (ms)")
//p.label(0,0.5,"Current (mA/cm2)")
vnode = new Vector()
vnode.record(&node[node_num].v(.5))
run()
vnode.plot(p2,dt,3,2)

objref spaceOverTime, vnode, col_data
spaceOverTime = new Graph()
spaceOverTime.size(0,tstop,-90,100)
//p.label(0.3,0,"Time (ms)")
//p.label(0,0.5,"Current (mA/cm2)")
for i=0, nnode-2 {
    
   
    
    col_data = xtra_pot_at_node.getcol(i)
    col_data.plot(spaceOverTime,dt,3,2)
}





objectvar rvp, g

rvp = new RangeVarPlot("v")
node[0] rvp.begin(0)
node[20] rvp.end(1)
g = new Graph()
g.addobject(rvp)
g.size(rvp.left(), rvp.right(),-90,50)

